//genesis
// kkit Version 11 flat dumpfile

// Saved on 100
include kkit {argv 1}
FASTDT = 0.001
SIMDT = 0.001
CONTROLDT = 0.1
PLOTDT = 0.1
MAXTIME = 100
TRANSIENT_TIME = 2
VARIABLE_DT_FLAG = 0
DEFAULT_VOL = 1.6666666666666674e-21
VERSION = 11.0 
setfield /file/modpath value ~/scripts/modules
kparms

//genesis
initdump -version 3 -ignoreorphans 1
simobjdump table input output alloced step_mode stepsize x y z
simobjdump xtree path script namemode sizescale
simobjdump xcoredraw xmin xmax ymin ymax
simobjdump xtext editable
simobjdump xgraph xmin xmax ymin ymax overlay
simobjdump xplot pixflags script fg ysquish do_slope wy
simobjdump group xtree_fg_req xtree_textfg_req plotfield expanded movealone \
  link savename file version md5sum mod_save_flag x y z
simobjdump geometry size dim shape outside xtree_fg_req xtree_textfg_req x y z
simobjdump kpool DiffConst CoInit Co n nInit mwt nMin vol slave_enable \
  geomname xtree_fg_req xtree_textfg_req x y z
simobjdump kreac kf kb notes xtree_fg_req xtree_textfg_req x y z
simobjdump kenz CoComplexInit CoComplex nComplexInit nComplex vol k1 k2 k3 \
  keepconc usecomplex notes xtree_fg_req xtree_textfg_req link x y z
simobjdump stim level1 width1 delay1 level2 width2 delay2 baselevel trig_time \
  trig_mode notes xtree_fg_req xtree_textfg_req is_running x y z
simobjdump xtab input output alloced step_mode stepsize notes editfunc \
  xtree_fg_req xtree_textfg_req baselevel last_x last_y is_running x y z
simobjdump kchan perm gmax Vm is_active use_nernst notes xtree_fg_req \
  xtree_textfg_req x y z
simobjdump transport input output alloced step_mode stepsize dt delay clock \
  kf xtree_fg_req xtree_textfg_req x y z
simobjdump proto x y z
simundump geometry /kinetics/geometry 0 1.6666666666666674e-21 3 sphere  "" white black 1 3 0
simundump kpool /kinetics/input 0 0.0 0 0 0 0.0 0 0 1.0036902500000005 0 /kinetics/geometry 62 black -3 1 0
simundump kpool /kinetics/output 0 0.0 0 0 0 0.0 0 0 1.0036902500000005 0 /kinetics/geometry blue black 1 1 0
simundump kreac /kinetics/kreac 0 0.19890136127264257 0.09943190127016051 "" white black -1 2 0
simundump xgraph /graphs/conc1 0 0 99 0.001 0.999 0
simundump xgraph /graphs/conc2 0 0 100 0 1 0
 simundump xplot /graphs/conc1/input.Co 3 524288 \
"delete_plot.w <s> <d>; edit_plot.D <w>" black 0 0 1
simundump xplot /graphs/conc1/output.Co 3 524288 \
"delete_plot.w <s> <d>; edit_plot.D <w>" black 0 0 1
simundump xgraph /moregraphs/conc3 0 0 100 0 1 0
simundump xgraph /moregraphs/conc4 0 0 100 0 1 0
 simundump xcoredraw /edit/draw 0 -6 4 -2 6
simundump xtree /edit/draw/tree 0 \
  /kinetics/#[],/kinetics/#[]/#[],/kinetics/#[]/#[]/#[][TYPE!=proto],/kinetics/#[]/#[]/#[][TYPE!=linkinfo]/##[] "edit_elm.D <v>; drag_from_edit.w <d> <S> <x> <y> <z>" auto 0.6
simundump xtext /file/notes 0 1
addmsg /kinetics/input /kinetics/kreac SUBSTRATE n 
addmsg /kinetics/kreac /kinetics/input REAC A B 
addmsg /kinetics/output /kinetics/kreac PRODUCT n 
addmsg /kinetics/kreac /kinetics/output REAC B A
addmsg /kinetics/input /graphs/conc1/input.Co PLOT Co *input *62
addmsg /kinetics/output /graphs/conc1/output.Co PLOT Co *output *blue

enddump
 // End of dump
complete_loading
